<?xml version="1.0" encoding="UTF-8" ?>
<Feature SiLA2Version="1.0" FeatureVersion="1.0" Originator="de.fau" Category="dispensing"
         xmlns="http://www.sila-standard.org"
         xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
         xsi:schemaLocation="http://www.sila-standard.org https://gitlab.com/SiLA2/sila_base/raw/master/schema/FeatureDefinition.xsd">
    <Identifier>Ot2Controller</Identifier>
    <DisplayName>OT-2 Controller</DisplayName>
    <Description>A SiLA 2 complaint controller for an OT-2 Liquid Handler robot.</Description>
    <Property>
        <Identifier>Connection</Identifier>
        <DisplayName>Connection</DisplayName>
        <Description>Connection details of the remote OT-2.</Description>
        <Observable>No</Observable>
        <DataType>
            <Basic>String</Basic>
        </DataType>
    </Property>
    <Property>
        <Identifier>AvailableProtocols</Identifier>
        <DisplayName>Available Protocols</DisplayName>
        <Description>List of the stored files available on the OT-2.</Description>
        <Observable>No</Observable>
        <DataType>
            <List>
                <DataType>
                    <Basic>String</Basic>
                </DataType>
            </List>
        </DataType>
    </Property>
    <Property>
        <Identifier>AvailableJupyterNotebooks</Identifier>
        <DisplayName>Available Jupyter Notebooks</DisplayName>
        <Description>List of the stored Jupyter Notebooks available on the OT-2.</Description>
        <Observable>No</Observable>
        <DataType>
            <List>
                <DataType>
                    <Basic>String</Basic>
                </DataType>
            </List>
        </DataType>
    </Property>
    <Property>
        <Identifier>CameraPicture</Identifier>
        <DisplayName>Camera Picture</DisplayName>
        <Description>A current picture from the inside of the OT-2 made with the built-in camera.</Description>
        <Observable>No</Observable>
        <DataType>
            <Structure>
                <Element>
                    <Identifier>ImageData</Identifier>
                    <DisplayName>Image Data</DisplayName>
                    <Description>The *.jpg image.</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Binary</Basic>
                            </DataType>
                            <Constraints>
                                <ContentType>
                                    <Type>image</Type>
                                    <Subtype>jpeg</Subtype>
                                </ContentType>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>ImageTimestamp</Identifier>
                    <DisplayName>Image Timestamp</DisplayName>
                    <Description>The timestamp when the image was taken.</Description>
                    <DataType>
                        <Basic>Timestamp</Basic>
                    </DataType>
                </Element>
            </Structure>
        </DataType>
    </Property>
    <Command>
        <Identifier>UploadProtocol</Identifier>
        <DisplayName>Upload Protocol</DisplayName>
        <Description>Uploads the given Protocol to the "/data/user_storage" dir on the OT-2.</Description>
        <Observable>No</Observable>
        <Parameter>
            <Identifier>ProtocolSourcePath</Identifier>
            <DisplayName>Protocol Source Path</DisplayName>
            <Description>The path to the Protocol to upload.</Description>
            <DataType>
                <Basic>String</Basic>
            </DataType>
        </Parameter>
        <DefinedExecutionErrors>
            <Identifier>UploadFileFailed</Identifier>
        </DefinedExecutionErrors>
    </Command>
    <Command>
        <Identifier>RemoveProtocol</Identifier>
        <DisplayName>Remove Protocol</DisplayName>
        <Description>Removes the given Protocol from the "/data/user_storage" dir on the OT-2.</Description>
        <Observable>No</Observable>
        <Parameter>
            <Identifier>ProtocolFile</Identifier>
            <DisplayName>Protocol File</DisplayName>
            <Description>The file name of the Protocol to remove.</Description>
            <DataType>
                <Basic>String</Basic>
            </DataType>
        </Parameter>
        <DefinedExecutionErrors>
            <Identifier>RemoveFileFailed</Identifier>
        </DefinedExecutionErrors>
    </Command>
    <Command>
        <Identifier>RunProtocol</Identifier>
        <DisplayName>Run Protocol</DisplayName>
        <Description>Runs the given Protocol on the OT-2.</Description>
        <Observable>No</Observable>
        <Parameter>
            <Identifier>ProtocolFile</Identifier>
            <DisplayName>Protocol File</DisplayName>
            <Description>The file name of the Protocol to run.</Description>
            <DataType>
                <Basic>String</Basic>
            </DataType>
        </Parameter>
        <Parameter>
            <Identifier>IsSimulating</Identifier>
            <DisplayName>Is Simulating</DisplayName>
            <Description>Defines whether the protocol gets just simulated or actually executed on the device.
            </Description>
            <DataType>
                <Basic>Boolean</Basic>
            </DataType>
        </Parameter>
        <Response>
            <Identifier>ReturnValue</Identifier>
            <DisplayName>Return Value</DisplayName>
            <Description>The returned value from the executed protocol. On a simulated execution, only the value 0
                is indicating a successful simulation.
            </Description>
            <DataType>
                <Basic>Integer</Basic>
            </DataType>
        </Response>
    </Command>
    <DefinedExecutionError>
        <Identifier>UploadFileFailed</Identifier>
        <DisplayName>Upload File Failed</DisplayName>
        <Description>The upload of the file to the OT-2 device failed.</Description>
    </DefinedExecutionError>
    <DefinedExecutionError>
        <Identifier>RemoveFileFailed</Identifier>
        <DisplayName>Remove File Failed</DisplayName>
        <Description>The file on the OT-2 device does not exist or could not be removed.</Description>
    </DefinedExecutionError>
</Feature>
